PsychoPy2experiment version="1.85.3"
Settings
  Monitor = testMonitor
  color = $[-0.467,-0.106,0.537]
  Experiment info = {u'aGroup': u'', u'cBlock': u'', u'bSubject': u''}
  Units = degFlatPos
  Window size (pixels) = [1280, 1024]
  Full-screen window = True
  Save csv file = True
  Show mouse = True
  Data filename = u'data/%s-%s-%s' % (expInfo['aGroup'], expInfo['bSubject'], expInfo['cBlock'])
  expName = main
  Screen = 1
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Routines
  Routine selectingRoutine
    KeyboardComponent selectingHintKey
      forceEndRoutine = True
      allowedKeys = '1', '2'
      startVal [time (s)] = 0.0
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    ImageComponent selectingHintImage
      startVal [time (s)] = 0.0
      image = ./assets/images/selectingHint.png
      size = (70, 39.375)
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    CodeComponent sendMark_D_MD
      Begin Routine:
        send_command(server, 'MK d')
      End Routine:
        send_command(server, 'MK f')
  Routine end
    KeyboardComponent endKey
      forceEndRoutine = True
      allowedKeys = 'p'
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent endImage
      startVal [time (s)] = 0.0
      image [set every repeat] = './assets/images/' + $endScreen + '.png'
      size = (70, 39.375)
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  Routine showTrailResponse
    ImageComponent trailResultImage
      stopVal [duration (s)] = 5
      startVal [time (s)] = 0.0
      image [set every repeat] = "assets/images/" + $currentImage + ".png"
      size = (70, 39.375)
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    CodeComponent sendMark_R
      Begin Routine:
        send_command(server, 'MK r')
  Routine fixPoint
    TextComponent fixPointText
      text = +
      stopVal [duration (s)] = 5
      startVal [time (s)] = 0.0
      font = Microsoft Yahei
      letterHeight = 3
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    CodeComponent sendMark_C
      Begin Routine:
        send_command(server, 'MK c')
  Routine waitingResponse
    CodeComponent sendDecisionScript
      Begin Routine:
        if selectingHintKey.keys[0] == '1':
          command = '1'
        else:
          command = '0'

        send_command(server, 'DC ' + command)
    ImageComponent waitingResponseImage
      startVal [time (s)] = 0.0
      image = ./assets/images/waitingResponse.png
      size = (70, 39.375)
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  Routine waitingSlide
    ImageComponent waitingSlideImage
      startVal [time (s)] = 0.0
      image = ./assets/images/waitingSlide.png
      size = (70, 39.375)
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    CodeComponent finishedSlideSignal
      Begin Routine:
        if not needSlide:
          continueRoutine = False
        else:
          send_command(server, 'RD')
  Routine waitPlayerConnection
    CodeComponent experimentConfiguration
      Begin Experiment:
        global blockCover
        global needSlide
        global endScreen

        blockCover = ""
        needSlide = False
        endScreen = ""

        totalMoney = ""
        currentImage = ""

        experimentConfig = {
          0: {
            "blockCover": "routinePractice",
            "endScreen": "finishedBlockScreen",
            "needSlide": True
          },
          1: {
            "blockCover": "routineNormalNoEquipment",
            "endScreen": "finishedBlockScreen",
            "needSlide": False
          },
          2: {
            "blockCover": "routineNormal",
            "endScreen": "finishedBlockScreen",
            "needSlide": False
          },
          3: {
            "blockCover": "routineNormal",
            "endScreen": "thanksScreen",
            "needSlide": False
          }
        }
    CodeComponent serverEventManager
      Begin Experiment:
        import asyncore
        import socket
        import threading

        class socket_client(asyncore.dispatcher):
          def __init__(self, host, port):
            asyncore.dispatcher.__init__(self)
            self.create_socket(socket.AF_INET, socket.SOCK_STREAM)
            self.connect( (host, port) )
            self.SendData = ""
            self.RecvData = ""

          def handle_connect(self):
            print '[CONN] Connected to the server.'

          def handle_close(self):
            print '[CONN] Disconnected.'
            self.close()

          def handle_read(self):
            self.RecvData = self.recv(8192)
            if len(self.RecvData) > 0:
              handle_server_response(self.RecvData, self)

          def handle_write(self):
            send_byte = self.send(self.SendData)
            print "[SEND] " + self.SendData

          def writable(self):
            return False

        class PDESClient(threading.Thread):
           def __init__(self,host,port):
               self.client = socket_client(host, port)
               threading.Thread.__init__ ( self )
           def run(self):
               try:
                   asyncore.loop()
               except:
                   pass

        def handle_server_response(data, connection):
          global totalMoney
          global currentImage
          global continueRoutine
          global blockCover
          global needSlide
          global endScreen

          commandString = data.split()
          command = commandString[0]
          parameter = commandString[1:]

          if command == 'ST':
            print '[STAT] Running command: ST!'
            continueRoutine = False
          elif command == 'RS':
            currentImage = 'selection' + str(parameter[1] * 1) + str(parameter[2] * 1)
            totalMoney = str(parameter[4])
            continueRoutine = False
          elif command == 'UL':
            experimentLoop.finished = True
          elif command == 'TR':
            blockCover = experimentConfig[int(parameter[0])]["blockCover"]
            needSlide  = experimentConfig[int(parameter[0])]["needSlide"]
            endScreen  = experimentConfig[int(parameter[0])]["endScreen"]
          elif command == 'WHO':
            connection.SendData = "TP exp\r\n"
            connection.handle_write()
          print "[RECV] " + data


        def send_command(server, data):
          server.client.SendData = data + "\r\n"
          server.client.handle_write()
    ImageComponent waitPlayerConnectionImage
      startVal [time (s)] = 0.0
      image = ./assets/images/splashScreen.png
      size = (70, 39.375)
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    CodeComponent connectToServer
      Begin Experiment:
        server = PDESClient('192.168.1.1' , 2333)
        server.start()
  Routine showExperimentResult
    ImageComponent totalMoneyBackground
      stopVal [duration (s)] = 20
      startVal [time (s)] = 0
      image = assets/images/totalMoney.png
      size = (70, 39.375)
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    TextComponent resultText
      text [set every repeat] = $totalMoney
      stopVal [duration (s)] = 20
      startVal [time (s)] = 0.0
      font = Microsoft Yahei
      letterHeight = 5
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    KeyboardComponent keyToEndExperiment
      stopVal [duration (s)] = 20
      forceEndRoutine = True
      allowedKeys = 'p'
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent SendFinScript
      Begin Routine:
        send_command(server, 'FN '+expInfo['aGroup']+'-'+expInfo['cBlock'])
        send_command(server, 'FIN')
  Routine waitStartExperiment
    CodeComponent sendStartScript
      Begin Routine:
        send_command(server, 'RD')
    ImageComponent willStartExperimentImage
      startVal [time (s)] = 0.0
      image = ./assets/images/waitStartExperiment.png
      size = (70, 39.375)
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  Routine Regisiter
    TextComponent blank
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine willStart
    ImageComponent image
      stopVal [duration (s)] = 3
      startVal [time (s)] = 0.0
      image = ./assets/images/willStart.png
      size = (70, 39.375)
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  Routine slidePlayer
    ImageComponent slideImage
      startVal [time (s)] = 0.0
      image [set every repeat] = './assets/images/'+$slide+'.png'
      size = (70, 39.375)
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    KeyboardComponent slideKeypress
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent skipSlidePlayer
      Begin Routine:
        if not needSlide:
          slidePlayerController.finished = True
          continueRoutine = False
  Routine keypressToStart
    ImageComponent keypressToStartImage
      startVal [time (s)] = 0.0
      image [set every repeat] = './assets/images/' + $blockCover + '.png'
      size = (70, 39.375)
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    KeyboardComponent keypressToStartKey
      forceEndRoutine = True
      allowedKeys = 'p'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine BugFix
    TextComponent text
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine routinePrepare
    ImageComponent selectingPrepareImage
      stopVal [duration (s)] = 5
      startVal [time (s)] = 0
      image = assets/images/frame.png
      size = (70, 39.375)
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    CodeComponent sendMark_T
      Begin Routine:
        send_command(server, 'MK t')
Flow
  Routine waitPlayerConnection
  LoopInitiator slidePlayerController loopType="TrialHandler"
    conditionsFile = assets\configs\slides.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [{'slide': u'guide1'},
      {'slide': u'guide2'},
      {'slide': u'guide3'},
      {'slide': u'guide4'},
      {'slide': u'guide5'},
      {'slide': u'guide6'},
      {'slide': u'guide7'}]
    Routine slidePlayer
  LoopTerminator slidePlayerController
  Routine waitingSlide
  Routine willStart
  Routine keypressToStart
  Routine waitStartExperiment
  LoopInitiator experimentLoop loopType="TrialHandler"
    loopType = random
    nReps = 100
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    Routine fixPoint
    Routine routinePrepare
    Routine selectingRoutine
    Routine waitingResponse
    Routine showTrailResponse
  LoopTerminator experimentLoop
  Routine showExperimentResult
